PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = tutorial 6 (krisha final)
  keyboardBackend = Pyglet
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days "
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/krishashah/Downloads/conditions  - Sheet1 (2).csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('reward_today', 1), ('future_reward', 5), ('delay', 7)]),
      OrderedDict([('reward_today', 20), ('future_reward', 40), ('delay', 13)]),
      OrderedDict([('reward_today', 80), ('future_reward', 200), ('delay', 21)]),
      OrderedDict([('reward_today', 150), ('future_reward', 500), ('delay', 62)]),
      OrderedDict([('reward_today', 300), ('future_reward', 600), ('delay', 89)]),
      OrderedDict([('reward_today', 550), ('future_reward', 800), ('delay', 119)]),
      OrderedDict([('reward_today', 950), ('future_reward', 1000), ('delay', 162)])]
    Routine trial
  LoopTerminator trials
